PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    TextComponent task_cue
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $task_type
      letterHeight = 0.08
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    TextComponent stimulus
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      color [set every repeat] = $stim_colour
      colorSpace = named
      text [set every repeat] = $stim_symbol
      letterHeight = 0.22
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    KeyboardComponent response
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      allowedKeys = 'left','right'
      store = all keys
      storeCorrect = True
      correctAns [set every repeat] = $correct_key
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    TextComponent feeback_text
      startVal [time (s)] = 3
      stopVal [duration (s)] = 4
      pos = 0,-0.35
      text = Practice trial complete
      letterHeight = 0.05
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  Routine welcome
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    TextComponent welcome_text
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        TASK SWITCHING EXPERIMENT

        Welcome!

        You will perform colour and shape tasks.

        Press SPACE to continue.
    KeyboardComponent welcome_key
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine instructions
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    TextComponent text
      startVal [time (s)] = 0
      letterHeight = 0.05
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      text:
        TASK INSTRUCTIONS

        COLOUR TASK: Identify the colour of the symbol.
        LEFT ARROW = RED; RIGHT ARROW = BLUE.

        SHAPE TASK: Identify the shape of the symbol.
        LEFT ARROW = CIRCLE; RIGHT ARROW = SQUARE.

        A cue tells you which task to perform.
        Respond as quickly and accurately as possible.

        Press SPACE to begin practice.
    KeyboardComponent key_resp
      startVal [time (s)] = 0
      forceEndRoutine = True
      allowedKeys = 'space'
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  Routine End
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    TextComponent end_text
      startVal [time (s)] = 0
      letterHeight = 0.06
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      text:
        EXPERIMENT COMPLETE!

        Thank you for participating.

        Your responses have been recorded.

        You may now inform the researcher
        that you have finished.
  Routine MainTrial
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    TextComponent task_cue1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $task_type
      letterHeight = 0.08
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    TextComponent stimulus1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
      color [set every repeat] = $stim_colour
      colorSpace = named
      text [set every repeat] = $stim_symbol
      letterHeight = 0.22
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    KeyboardComponent response1
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      forceEndRoutine = False
      allowedKeys = 'left','right'
      store = all keys
      storeCorrect = True
      correctAns [set every repeat] = $correct_key
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Flow
  Routine welcome
  Routine instructions
  LoopInitiator practice_loop loopType="TrialHandler"
    loopType = sequential
    conditionsFile = TS_Practice_Conditions.csv
    nReps = 1
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator practice_loop
  LoopInitiator main_loop loopType="TrialHandler"
    loopType = sequential
    conditionsFile = TS_Main_Conditions.csv
    nReps = 1
    conditions = []
    endPoints = [0,1]
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    Routine MainTrial
  LoopTerminator main_loop
  Routine End
